PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'/data_color_only/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = Stroop_Squared_color_only
  logging level = debug
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Routines
  Routine Choice
    CodeComponent choice_code
      Code Type = Auto->JS
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      End Routine:
        if investment_choice.clicked_name[0] == 'no_change':
            present_quantity = 0
            range = (0, 15)
            qant_back = 'Quantity_background_image.png'
        if investment_choice.clicked_name[0] == 'buy':
            present_quantity = 1
            min = 10
            max = int(CRNT_savings)
            qant_back = 'buy_background.png'
        if investment_choice.clicked_name[0] == 'sell':
            present_quantity = 1
            min = 10
            max = int(CRNT_investment)
            qant_back = 'Quantity_background_image.png'
    ImageComponent choice_background_image_maker
      image = Choice_background.png
      saveStartStop = False
      size = (1.6,1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    MouseComponent investment_choice
      clickable = buy, sell, no_change
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent buy
      image = buy_button.png
      pos = (-0.33, -.04)
      saveStartStop = False
      size = (0.25, 0.1007)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = height
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    ImageComponent sell
      image = sell_button.png
      pos = (0,-.04)
      saveStartStop = False
      size = (0.25, 0.1007)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent no_change
      image = nothing_button.png
      pos = (.33, -.04)
      saveStartStop = False
      size = (0.25, 0.1007)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent timer
      font = Calibri
      letterHeight = 0.05
      pos = (-.17,-.19)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $int(20+(routineTimer.getTime()))
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    TextComponent year_readout_3
      font = Calibri
      letterHeight = 0.09
      pos = (-.41, .39)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $year
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    TextComponent savings_readout
      font = Calibri
      letterHeight = 0.05
      pos = (-.1, .2801)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $CRNT_savings
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    TextComponent investment_readout
      font = Calibri
      letterHeight = 0.05
      pos = (-.1, .21)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $CRNT_investment
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    TextComponent late
      color = Darkred
      letterHeight = 0.05
      pos = (0, -.30)
      saveStartStop = False
      startVal [time (s)] = 20.0
      text = 200 dollar late fee assigned! Choose faster
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    TextComponent Price_readout
      font = Calibri
      letterHeight = 0.03
      pos = (.4, .21)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $crnt_price
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  Routine Quantity
    CodeComponent slider_code
      Code Type = Auto->JS
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      Begin Routine:
        #more code to deal with the parts where PsychoPy is being stupid and won't accept varibles for the slider ticks
        Quantity_slider = visual.Slider(win=win,
            size=(1.3, 0.05), pos=(0, -0.055), units=None,
            labels=(min, max), ticks=(min, max),
            granularity=5, style=('rating', 'triangleMarker'),
            color='White', font='HelveticaBold',
            flip=False, depth=-8)
      End Routine:
        if investment_choice.clicked_name[0] == 'buy':
            CRNT_investment = CRNT_investment + Quantity_slider.getRating()
            CRNT_savings = CRNT_savings - Quantity_slider.getRating()
        elif investment_choice.clicked_name[0] == 'sell':
            CRNT_investment = CRNT_investment - Quantity_slider.getRating()
            CRNT_savings = CRNT_savings + Quantity_slider.getRating()

        thisExp.addData('post_sale_value',CRNT_investment)
    ImageComponent quantity_background
      image [set every repeat] = $qant_back
      saveStartStop = False
      size = (1.6,1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    MouseComponent slider_mouse
      clickable = money_submit_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [condition] = Quantity_slider.rating
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    ImageComponent money_submit_button
      image = submit.png
      pos = (.3, -.3)
      saveStartStop = False
      size = (0.25, 0.1007)
      startVal [condition] = Quantity_slider.rating
      texture resolution = 512
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    TextComponent slider_value
      letterHeight = 0.04
      pos = (0, -.1)
      saveStartStop = False
      startVal [condition] = Quantity_slider.rating
      text [set every frame] = $Quantity_slider.getRating()
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    TextComponent click_line
      letterHeight = 0.06
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = Quantity_slider.rating
      text [set every frame] = Click and drag on line
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    TextComponent year_readout_4
      font = Calibri
      letterHeight = 0.09
      pos = (-.41, .39)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $year
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    TextComponent savings_readout_2
      font = Calibri
      letterHeight = 0.05
      pos = (-.1, .2801)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CRNT_savings
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    TextComponent investment_readout_2
      font = Calibri
      letterHeight = 0.05
      pos = (-.1, .21)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CRNT_investment
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    SliderComponent Quantity_slider
      color = White
      forceEndRoutine = False
      granularity = 5
      labels [set every repeat] = (min, max)
      letterHeight = 0.05
      pos = (0, -0.055)
      saveStartStop = False
      size = (1.3, 0.05)
      startVal [time (s)] = 0.0
      styles = ['rating', 'triangleMarker']
      ticks [set every repeat] = (min, max)
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    TextComponent timer_2
      font = Calibri
      letterHeight = 0.05
      pos = (-.17,-.19)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every frame] = $int(20+(routineTimer.getTime()))
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    TextComponent late_2
      color = Darkred
      letterHeight = 0.05
      pos = (0, -.30)
      startVal [time (s)] = 20.0
      text = 200 dollar late fee assigned! Choose faster
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    TextComponent Price_readout_2
      font = Calibri
      letterHeight = 0.03
      pos = (.4, .21)
      startVal [time (s)] = 0.0
      text [set every repeat] = $crnt_price
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  Routine News
    CodeComponent Extra_code
      Code Type = Auto->JS
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      Begin Routine:
        #extra code needed here to work with the sizes because PsychoPy is kinda dumb
        A = News1_sizeA
        B = News1_sizeB
        C = Tweet_1_sizeA
        D = Tweet_1_sizeB
        E = Tweet_2_sizeA
        F = Tweet_2_sizeB
    ImageComponent news_background_image
      image = news_background.png
      saveStartStop = False
      size = (1.6,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    ImageComponent main_news_image
      image [set every repeat] = $select_news
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      size [set every repeat] = (A,B)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      texture resolution = 512
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    ImageComponent secondary_news_image
      image [set every repeat] = $extra_news
      pos = (.29, -.25)
      saveStartStop = False
      size = (0.6, 0.4)
      startVal [time (s)] = 6
      stopVal [time (s)] = 10
      texture resolution = 512
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    ImageComponent tweet_1
      image [set every repeat] = $Tweet_1_select
      pos = (-.42, -.3)
      saveStartStop = False
      size [set every repeat] = (C, D)
      startVal [time (s)] = 2
      stopVal [time (s)] = 10
      texture resolution = 512
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    ImageComponent tweet_2
      image [set every repeat] = $Tweet_2_select
      pos = (.42, .25)
      saveStartStop = False
      size [set every repeat] = (E,F)
      startVal [time (s)] = 4
      stopVal [time (s)] = 10
      texture resolution = 512
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    KeyboardComponent Accept_news
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 10
      store = nothing
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    TextComponent year_readout_2
      font = Calibri
      letterHeight = 0.09
      pos = (-.41, .39)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 10
      text [set every repeat] = $year
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  Routine Salary
    CodeComponent salary_code
      Code Type = Auto->JS
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      End Routine:
        CRNT_savings = CRNT_savings + 30000
        crnt_price = "The current price of investments is $"+str(price)+" per stock"
    ImageComponent salary_background_image
      image = Salary_background.png
      saveStartStop = False
      size = (1.6,1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent accept_button
      image = Accept.png
      pos = (0,-.04)
      saveStartStop = False
      size = (0.75, 0.19779)
      startVal [time (s)] = 1
      texture resolution = 512
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    MouseComponent salary_mouse
      clickable = accept_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 1
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    TextComponent year_readout
      font = Calibri
      letterHeight = 0.09
      pos = (-.41, .39)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $year
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  Routine End_Results
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        CRNT_savings = int(CRNT_savings + (CRNT_savings*0.05))
        CRNT_investment = int(CRNT_investment + (CRNT_investment*stock_return))



        savings_results_text = str("Gained "+ str(int((CRNT_savings*0.005))))
        if stock_return > 0:
            investment_results_text = str("Gained " + str(int((CRNT_investment*stock_return))))
            investment_results_color = "Darkgreen"
        elif stock_return < 0:
            investment_results_text = str("Lost " + str(int((CRNT_investment*stock_return))))
            investment_results_color = "Red"
    ImageComponent end_results_background
      image = results_background.png
      saveStartStop = False
      size = (1.6,1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent results_image
      image [set every repeat] = $results_chart
      pos = (0.25, -0.202)
      saveStartStop = False
      size = (.999, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent new_year_button
      image = new_year.png
      pos = (.5, .12)
      saveStartStop = False
      size = (0.4, 0.10991)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    MouseComponent new_year_mouse
      clickable = new_year_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0
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    TextComponent year_readout_5
      font = Calibri
      letterHeight = 0.09
      pos = (-.41, .39)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $year
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    TextComponent savings_readout_4
      font = Calibri
      letterHeight = 0.05
      pos = (-.1, .2801)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CRNT_savings
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    TextComponent investment_readout_4
      font = Calibri
      letterHeight = 0.05
      pos = (-.1, .21)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CRNT_investment
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    TextComponent savings_results
      color = Darkgreen
      font = Calibri
      letterHeight = 0.05
      pos = (.15, .2801)
      startVal [time (s)] = 0.0
      text [set every repeat] = $savings_results_text
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    TextComponent Investment_results
      color [set every repeat] = $investment_results_color
      font = Calibri
      letterHeight = 0.05
      pos = (.15, .21)
      startVal [time (s)] = 0.0
      text [set every repeat] = $investment_results_text
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  Routine extra_code
    CodeComponent unused_code
      Code Type = Auto->JS
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      Begin Routine:
        if investment_choice.clicked_name == no_change:
            present_quantity = 0
        else:
            present_quantity = 1
  Routine final_results
    CodeComponent final_code
      Code Type = Auto->JS
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      Begin Routine:
        final_score = "$"+str(int(CRNT_savings + CRNT_investment))
        phase="main"
    ImageComponent Results_image_maker
      image = final_reslts_background.png
      saveStartStop = False
      size = (1.6,1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent final_results_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent final_money_readout
      font = Calibri
      letterHeight = 0.1
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $final_score
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  Routine Age
    RatingScaleComponent age_rater
      forceEndRoutine = True
      high = 55
      low = 15
      pos = 0, -0.4
      saveStartStop = False
      size = 2.0
      startVal [time (s)] = 0.0
      storeRatingTime = False
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    TextComponent Age_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Before we finish, what is your age? (in years)
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  Routine gender
    RatingScaleComponent gender_rating
      categoryChoices = male, female, other, rather not say
      forceEndRoutine = True
      high = 4
      low = 1
      pos = 0, -0.2
      saveStartStop = False
      size = 1
      startVal [time (s)] = 0.0
      storeRatingTime = False
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    TextComponent gender_text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is your gender? 
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  Routine debrief
    ImageComponent debrief_image
      image = Debrief.png
      pos = (0, .08)
      saveStartStop = False
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent debrief_text
      letterHeight = 0.035
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        When you are done,
        you can find the researcher to confirm your SONA credits
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_ins
    CodeComponent prac_ins_code
      Code Type = Auto->JS
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      Begin Routine:
        if prac_block_count == 0:
            tsk_txt_maker_color = "DarkBlue"
            prac_rows = '0:16'
            if task == 'size':
                tsk_txt = "Q Large --- Small P"
                prac_ins_text = 'You will begin with a practice phase to learn which keys to press.\nFor images with BLUE frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\nFor now, the task (size) will be written above the image. Learn to associate the task with the frame color, however, as the words will stop appearing soon.\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
            elif task == 'material':
                tsk_txt = "Q Non-metal --- P Metal"
                prac_ins_text = 'You will begin with a practice phase to learn which keys to press.\nFor images with BLUE frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\nFor now, the task (material) will be written above the image. Learn to associate the task with the frame color, however, as the words will stop appearing soon.\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
        elif prac_block_count == 1:
            tsk_txt_maker_color = "DarkRed"
            prac_rows = '16:32'
            if task == 'material':
                tsk_txt = "Q Large --- Small P"
                prac_ins_text = 'For images with RED frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
            elif task == 'size':
                tsk_txt = "Q Non-metal --- P Metal"
                prac_ins_text = 'For images with RED frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
        elif prac_block_count == 100:
            tsk_txt_maker_color = "DarkBlue"
            prac_rows = '0:16'
            if task == 'size':
                tsk_txt = "size"
                prac_ins_text = "Let's see each of the two tasks by themselves one more time. \n\nFor images with BLUE frames: \nIf the object is LARGER than a shoebox, press "+SRmapping[0]+"\nIf the object is SMALLER than a shoebox, press " +SRmapping[1]+"\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin"
            elif task == 'material':
                tsk_txt = "material"
                prac_ins_text = "Let's see each of the two tasks by themselves one more time. \n\nFor images with BLUE frames: \nIf the object is primarily METAL, press "+SRmapping[2]+"\nIf the object is primarily NON-METAL, press "+SRmapping[3]+"\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin"
        elif prac_block_count == 101:
            tsk_txt_maker_color = "DarkRed"
            prac_rows = '16:32'
            if task == 'material':
                tsk_txt = "size"
                prac_ins_text = "Let's see each of the two tasks by themselves one more time. \n\nFor images with RED frames: \nIf the object is LARGER than a shoebox, press "+SRmapping[0]+"\nIf the object is SMALLER than a shoebox, press " +SRmapping[1]+"\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin"
            elif task == 'size':
                tsk_txt = "material"
                prac_ins_text = "Let's see each of the two tasks by themselves one more time. \n\nFor images with RED frames: \nIf the object is primarily METAL, press "+SRmapping[2]+"\nIf the object is primarily NON-METAL, press "+SRmapping[3]+"\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin"
        elif prac_block_count == 2:
            tsk_txt = "   "
            tsk_txt_maker_color = "Gray"
            prac_rows = '32:64'
            if task == 'size':
                prac_ins_text = 'Next, both tasks and frame colors will be mixed together.\nRemember: For images with BLUE frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\nFor inages with RED frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
            elif task == 'material':
                prac_ins_text = 'Next, both tasks and frame colors will be mixed together.\nRemember: For images with BLUE frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\nFor images with RED frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
        elif prac_block_count == 3:
            tsk_txt = "    "
            tsk_txt_maker_color = "Gray"
            prac_rows = '32:64'
            if task == 'size':
                prac_ins_text = 'You can take a short break here if you wish.\n REMINDER: For images with BLUE frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\nFor images with RED frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
            elif task == 'material':
                prac_ins_text = 'You can take a short break here if you wish.\nREMINDER:For images with BLUE frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\nFor images with RED frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
        elif prac_block_count == 6:
            tsk_txt_maker_color = "DarkBlue"
            prac_rows = '0:16'
            if task == 'size':
                tsk_txt = "size"
                prac_ins_text = 'Lets repeat this entire practice phase once more to ensure you are an expert at this task.\nFor images with BLUE frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
            elif task == 'material':
                tsk_txt = "material"
                prac_ins_text = 'Lets repeat this entire practice phase once more to ensure you are an expert at this task.\nFor images with BLUE frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
        elif prac_block_count == 7:
            tsk_txt_maker_color = "DarkRed"
            prac_rows = '16:32'
            if task == 'material':
                tsk_txt = "size"
                prac_ins_text = 'For images with RED frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
            elif task == 'size':
                tsk_txt = "material"
                prac_ins_text = 'For images with RED frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
        elif prac_block_count == 8:
            tsk_txt = "    "
            tsk_txt_maker_color = "Gray"
            prac_rows = '32:64'
            if task == 'size':
                prac_ins_text = 'Next, both tasks and frame colors will be mixed together.\nFor images with BLUE frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\nFor images with RED frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
            elif task == 'material':
                prac_ins_text = 'Next, both tasks and frame colors will be mixed together.\nFor images with BLUE frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\nFor images with RED frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
        elif prac_block_count == 9:
            tsk_txt = "    "
            tsk_txt_maker_color = "Gray"
            prac_rows = '32:64'
            if task == 'size':
                prac_ins_text = 'You can take a short break here if you wish.\nREMINDER: For images with BLUE frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\nFor images with RED frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
            elif task == 'material':
                prac_ins_text = 'You can take a short break here if you wish.\nREMINDER:For images with BLUE frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\nFor images with RED frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
        else:
            prac_rows = '0:64' #can reduce this to 0:32 if it's taking too long
            tsk_txt = "    "
            tsk_txt_maker_color = "Gray"
            if task == 'size':
                prac_ins_text = 'You can take a short break here if you wish.\nREMINDER: For images with BLUE frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\nFor images with RED frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
            elif task == 'material':
                prac_ins_text = 'You can take a short break here if you wish.\nREMINDER:For images with BLUE frames: \nIf the object is primarily METAL, press '+SRmapping[2]+'\nIf the object is primarily NON-METAL, press '+SRmapping[3]+'\nFor images with RED frames: \nIf the object is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the object is SMALLER than a shoebox, press ' +SRmapping[1]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
      End Routine:
        prac_block_count = prac_block_count+1
    KeyboardComponent prac_ins_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent prac_ins_txt
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $prac_ins_text
      wrapWidth = 1.5
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  Routine fixation
    TextComponent fixation_cross
      color = black
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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    StaticComponent Fix_static
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine prac_trials
    ImageComponent prac_trial_image
      image [set during: fixation.Fix_static] = $stimPath
      saveStartStop = False
      size = (0.5, 0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      texture resolution = 512
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    KeyboardComponent prac_trial_resp
      correctAns = $response
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      storeCorrect = True
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    ImageComponent practice_frame
      image [set during: fixation.Fix_static] = $color
      saveStartStop = False
      size = (0.5, 0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      texture resolution = 512
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    TextComponent tsk_txt_maker
      color [set during: fixation.Fix_static] = $tsk_txt_maker_color
      letterHeight = 0.08
      pos = (0, 0.26)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set during: fixation.Fix_static] = $tsk_txt
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  Routine main_ins
    CodeComponent main_ins_code
      Code Type = Auto->JS
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      Begin Routine:
        main_rowsa = main_block_count *80
        main_rowsb = (main_block_count+1)*80 #80
        main_rows = str(main_rowsa)+":"+str(main_rowsb)

        if main_block_count == 2:
            if task == 'size':
                main_text = 'You will use new pictures, but the tasks and response keys to use will not change.\nFor images with BLUE frames: \nIf the image is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the image is SMALLER than a shoebox, press ' +SRmapping[1]+'\nFor images with RED frames: \nIf the image is primarily METAL, press '+SRmapping[2]+'\nIf the image is primarily NON-METAL, press '+SRmapping[3]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
            elif task == 'material':
                main_text = 'You will use new pictures, but the tasks and response keys to use will not change.\nFor images with BLUE frames: \nIf the image is primarily METAL, press '+SRmapping[2]+'\nIf the image is primarily NON-METAL, press '+SRmapping[3]+'\nFor images with RED frames: \nIf the image is LARGER than a shoebox, press '+SRmapping[0]+'\nIf the image is SMALLER than a shoebox, press ' +SRmapping[1]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
        else:
            if task == 'size':
                main_text = 'Take a break here.\nREMINDER:For BLUE frames: \nIf LARGER than a shoebox, press '+SRmapping[0]+'\nIf SMALLER than a shoebox, press ' +SRmapping[1]+'\nFor RED frames: \nIf primarily METAL, press '+SRmapping[2]+'\nIf primarily NON-METAL, press '+SRmapping[3]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'
            elif task == 'material':
                main_text = 'Take a break here. \nREMINDER:For BLUE frames: \nIf primarily METAL, press '+SRmapping[2]+'\nIf primarily NON-METAL, press '+SRmapping[3]+'\nFor RED frames: \nIf LARGER than a shoebox, press '+SRmapping[0]+'\nIf SMALLER than a shoebox, press ' +SRmapping[1]+'\n\nDO NOT LEAVE THIS PAGE UNTIL YOU HAVE MEMORIZED WHICH KEYS TO USE!\n\nPress the spacebar to begin'

        phase = "main"
      End Routine:
        main_block_count = main_block_count+1
        bloc_acc = 0
        corr_count = 0
    KeyboardComponent main_ins_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent main_ins_txt
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $main_text
      wrapWidth = 1.5
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  Routine main_trials
    CodeComponent tw_code
      Code Type = Auto->JS
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      Begin Routine:
        if task == 'size':
            tw_text = "Q Large --- Small P"
            tw_color = "Darkblue"
        else:
            tw_text = "Q Non-metal --- Metal P"
            tw_color = "Darkred"
    ImageComponent main_trial_image
      image [set during: fixation.Fix_static] = $stimPath
      saveStartStop = False
      size = (0.5, 0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    KeyboardComponent main_trial_resp
      correctAns = $response
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    ImageComponent main_frame
      image [set during: fixation.Fix_static] = $color
      saveStartStop = False
      size = (0.5, 0.375)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    TextComponent training_wheels
      color [set every repeat] = $tw_color
      letterHeight = 0.08
      pos = (0, 0.26)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $tw_text
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  Routine end
    TextComponent End_text
      letterHeight = 0.09
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        You have finished the experiment. You may now find the researcher to recieve SONA credit.

        Press spacebar to close the window
    KeyboardComponent end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 7
      store = nothing
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  Routine Questions
    TextComponent strategy_question
      font = Calibri
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = During the investment simulator, did you have a strategy for buying and selling, or were the choices more random? 
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    SliderComponent Strategy
      forceEndRoutine = False
      granularity = 1
      labels = ("Very strategic", "Neutral", "Very Random")
      letterHeight = 0.05
      pos = (0, .27)
      saveStartStop = False
      size = (1.2, 0.08)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating', 'triangleMarker']
      ticks = (1, 2, 3, 4, 5)
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    TextComponent negative_emotion
      font = Calibri
      letterHeight = 0.05
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How did you feel about the bad years in the sumulator (market crashes)? 
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    SliderComponent Emotion_response
      forceEndRoutine = False
      granularity = 1
      labels = ("very negative", "neutral", "very positive")
      letterHeight = 0.05
      pos = (0, -.1)
      saveStartStop = False
      size = (1.2, 0.08)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating', 'triangleMarker']
      ticks = (1, 2, 3, 4, 5)
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    TextComponent sell_pressure_text
      font = Calibri
      letterHeight = 0.05
      pos = (0, -.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Did you feel pressure to sell stocks during the market crashes? 
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    SliderComponent sell_pressure_response
      forceEndRoutine = False
      granularity = 1
      labels = ("strong pressure", "neutral", "no pressure")
      letterHeight = 0.05
      pos = (0, -.36)
      saveStartStop = False
      size = (1.2, 0.08)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating', 'triangleMarker']
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent qual_submit_button
      image = submit.png
      pos = (.5, .45)
      saveStartStop = False
      size = (0.25, 0.1007)
      startVal [condition] = sell_pressure_response.rating
      texture resolution = 512
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    MouseComponent slider_mouse_2
      clickable = qual_submit_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = sell_pressure_response.rating
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  Routine invest_Welcome
    CodeComponent PrerequisiteVariables
      Code Type = Auto->JS
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      Before Experiment:
        CRNT_savings = 10000
        CRNT_investment = 10000
        ins_loops=0
        year=0
        min=0
        max=15
        ins_loop = 1
        ins_image = "Ins0.png"
        prac_block_count = 0
        SRmapping_all = [['Q','P', 'Q', 'P'], ['Q', 'P', 'P', 'Q'], ['P', 'Q', 'Q', 'P'], ['P', 'Q', 'P', 'Q']]
        SRmapping = SRmapping_all[1]
        vaid_key_list = ['q','p']
        phase = 'prac'
        prac_block_count = 0
        main_block_count = 2
        tsk_txt_maker_color = "Black"
        tsk_txt = "    "
        bloc_acc = 100
        corr_count = 0
    KeyboardComponent welcome_invest_key
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent investment_welcome_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Investing Simulator!

        The Simulator will begin with a Consent Form.

        Press spacebar to view the Consent Form
  Routine Invest_Instructions
    CodeComponent invest_code_2
      Code Type = Auto->JS
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      Begin Routine:
        ins_image = "Ins"+str(ins_loop)+".png"
      End Routine:
        ins_loop = ins_loop + 1
    ImageComponent instructions_image_maker
      image [set every repeat] = $ins_image
      saveStartStop = False
      size = (1.6,1)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent instruction_response
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine invest_blank
    ImageComponent blank_image
      image = blank_background.png
      saveStartStop = False
      size = (1.6,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      texture resolution = 512
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    TextComponent year_readout_6
      font = Calibri
      letterHeight = 0.09
      pos = (-.41, .39)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
      text [set every repeat] = $year
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    TextComponent savings_readout_3
      font = Calibri
      letterHeight = 0.05
      pos = (-.1, .2801)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
      text [set every repeat] = $CRNT_savings
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    TextComponent investment_readout_3
      font = Calibri
      letterHeight = 0.05
      pos = (-.1, .21)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
      text [set every repeat] = $CRNT_investment
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  Routine finalScore
    TextComponent finalScore_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $u"Well done! You banked a total of\n%2.f Dollars\n\n\nPress space to move on to the next task" %bankedEarnings
      units = norm
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    KeyboardComponent doneKey
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
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  Routine feedback
    CodeComponent checkPopped
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
        from psychopy import sound
        bang = sound.Sound("bang.wav")
      Begin Routine:
        if popped==True:
          feedbackText="Oops! Lost that one!"
          #This makes the pop sound. Disabled for now
          #bang.play()
        else:
          feedbackText=u"You banked %.2f Dollars" %lastBalloonEarnings
    TextComponent feedbackMsg
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedbackText
      units = norm
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  Routine instructions
    TextComponent instrMessage
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Next is a game where you have to optimize your earnings in a balloon pumping competition.

        You get prize money for each balloon you pump up, according to its size. But if you pump it too far it will pop and you'll get nothing for that balloon.

        Balloons differ in their maximum size - they can occasionally reach to almost the size of the screen but most will pop well before that.

        Press;
            SPACE to pump the balloon
            ENTER to bank the cash for this balloon and move onto the next

        PRESS SPACEBAR TO BEGIN
    KeyboardComponent resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine Welcome_Page
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome! 
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    KeyboardComponent welcome_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Delay_instructions
    TextComponent text_2
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Next, you will be presented with choices between 2 amounts of money.
        Some will be delivered at different points in time.

        Your job is to consider which you prefer and choose using the LEFT or RIGHT arrow keys.

        There is no correct or incorrect response, please emphasise accuracy in which choice you prefer, no need to rush!

        Press SPACE to continue.
    KeyboardComponent space_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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  Routine ICF1
    ImageComponent ICF_image1
      image = ICF1.png
      pos = (0, 0.02)
      saveStartStop = False
      size = (0.7260428, 1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent ICF_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent ICF_text1
      color = red
      letterHeight = 0.04
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press spacebar to view the next page
      units = height
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  Routine ICF2
    ImageComponent ICF_image2
      image = ICF2.png
      pos = (0, 0.02)
      saveStartStop = False
      size = (0.7260428, 1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent ICF_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent ICF_text2
      color = black
      letterHeight = 0.02
      pos = (.59, -.29)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = .5
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      text:
        <-- If you agree to participate, press spacebar to proceed

        <-- If you do not agree to participate, no further action is needed and you are free to leave the lab
    PolygonComponent icf_polygon
      fillColor = $[1,1,1]
      pos = (-.342, -.29)
      saveStartStop = False
      shape = rectangle
      size = (0.02, 0.1)
      startVal [time (s)] = 0.0
      units = height
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  Routine finance_knowedge
    CodeComponent code_3
      Code Type = Auto->JS
    FormComponent finance_knowledge
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.07
      Items = financial_knowedge_scale.xlsx
      Randomize = False
      Style = custom...
      Text Height = 0.025
      itemColor = white
      markerColor = red
      pos = (-0.25, 0)
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent submit_button_3
      image = submit.png
      pos = (0.55, -0.4)
      saveStartStop = False
      size = (0.25, 0.1007)
      startVal [condition] = $finance_knowledge.complete == True
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    MouseComponent self_control_mouse_3
      clickable = submit_button_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.03
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please answer these questions to the best of your ability. Feel free to guess if unsure.
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  Routine doerman
    CodeComponent doerman_code
      Code Type = Auto->JS
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      Begin Experiment:
        crnt_offer = 0
        safe_offer = 0
        gamble_count = 1
        first_switch = 0
      Begin Routine:
        safe_offer = "A guaranteed winning of " + str(crnt_offer) + " dollars"
      End Routine:
        if first_switch == 0:
            if doerman_key_resp.keys== "p":
                doerman_loop.addData("doerman_switch", gamble_count)
                first_switch = 1

        if first_switch == 1:
                if doerman_key_resp.keys== "p":
                        doerman_loop.finished = True # exit the current loop
        crnt_offer = crnt_offer + 10
        gamble_count = gamble_count +1
    TextComponent text_5
      color = black
      letterHeight = 0.03
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Which option would you prefer? 
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    TextComponent text_6
      letterHeight = 0.04
      pos = (-.4, .3)
      saveStartStop = False
      startVal [time (s)] = 0.3
      text = Option 1 - Press Q
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    TextComponent text_7
      letterHeight = 0.04
      pos = (.4, .3)
      saveStartStop = False
      startVal [time (s)] = 0.3
      text = Option 1 - Press P
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    TextComponent text_8
      color = black
      letterHeight = 0.03
      pos = (-.4, .2)
      saveStartStop = False
      startVal [time (s)] = 0.3
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      text:
        A gamble with a 50% chance of winning 300 Dollars
        (and a 50% chance of winning 0 dollars)
    TextComponent text_9
      color = black
      letterHeight = 0.03
      pos = (.4, .2)
      saveStartStop = False
      startVal [time (s)] = 0.3
      text [set every repeat] = $safe_offer
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    KeyboardComponent doerman_key_resp
      allowedKeys = "q", "p"
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.3
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  Routine grable_single_item
    TextComponent text_10
      letterHeight = 0.03
      pos = (0, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Suppose you are considering making an investment. By the time you retire, this particular investment will be worth either 50,000 dollars or 100,000 dollars. Your financial advisor estimates that the probability of ending with 50,000 dollars is 50 percent and the probability of ending with100,000 dollars is also 50 percent. You must decide what price you are willing to pay now to participate in this investment. You also learn from your financial advisor that shares in this investment are limited and difficult to obtain. Therefore, the lower price you are willing to buy at, the lower the chance that you will be able to participate in the investment.
        Based on this information, what is the largest amount of money you would be willing to pay to buy this investment, assuming you had the money avaliable?
    SliderComponent Grable_slider
      forceEndRoutine = True
      granularity = 1
      labels = "53,991", "54,499", "55,143", "55,978", "57,083","58,566","60,571","63,246","66,667","70,711" 
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.4, 0.06)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7,8,9,10)
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  Routine stroop_square_welcome
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        stroop_block = 0 #needs to be 0 before running
        stroop_intro = 0
      Begin Routine:
        phase='prac'
        trial_count = 0
        if stroop_block ==0:
            condition_gen = "colorWorld_trialPool_0.csv"
            stm_height = 0.09
            Stim_2_txt = "RED"
            resp_A_2_txt = "RED"
            resp_B_2_txt = "BLUE"
            Stim_2_color = "darkblue"
            resp_A_2_color = "darkblue"
            resp_B_2_color = "darkred"
            Stim_2_image_setter = "transparent.png"
            resp_A_2_image_setter = "transparent.png"
            resp_B_2_image_setter = "transparent.png"
            stroop_image_size = (0,0)
            ins_cue_txt = "(text is in blue color)"
            stroop_intro = "Next, we will perform a task where you must name the color of a word while ignoring the word's meaning.\nPress spacebar to view instructions"
        elif stroop_block ==1:
            condition_gen = "emotion_trialPool_0.csv"
            stm_height = .06
            Stim_2_txt = "ANGRY"
            resp_A_2_txt = "ANGRY"
            resp_B_2_txt = "HAPPY"
            Stim_2_color = "white"
            resp_A_2_color = "white"
            resp_B_2_color = "white"
            Stim_2_image_setter = "17.png"
            resp_A_2_image_setter = "17.png"
            resp_B_2_image_setter = "18.png"
            ins_cue_txt = "(face is happy)"
            stroop_image_size = (0.2, 0.25)
            stroop_intro = "Next, we will perform a task where you must identify the emotion shown by a face while ignoring a word written over the face.\nPress spacebar to view instructions"
        elif stroop_block ==2:
            condition_gen = "finance_trialPool_0.csv"
            stm_height = .06
            Stim_2_txt = "LOSS"
            resp_A_2_txt = "LOSS"
            resp_B_2_txt = "GAIN"
            Stim_2_color = "white"
            Stim_2_color = "white"
            resp_A_2_color = "white"
            resp_B_2_color = "white"
            Stim_2_image_setter = "1.png"
            resp_A_2_image_setter = "1.png"
            resp_B_2_image_setter = "2.png"
            stroop_image_size = (0.27, 0.1611405)
            ins_cue_txt = "(chart shows a gain)"
            stroop_intro = "Next, we will perform a task where you must identify the trend on a stock market chart while ignoring a word written over the chart.\nPress spacebar to view instructions"
      End Routine:
        stroop_block = stroop_block +1
    TextComponent stroop_welcome_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $stroop_intro
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine stroop_square_trials
    CodeComponent stroop_trial_code
      Code Type = Auto->JS
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      Begin Routine:
        if trial_count == 0:
            trial_clock = core.Clock()
      Each Frame:
        Exp_dur = duration
        rate = 1.19/duration
        maskX = 1.19
        maskX = 1.19 - (rate*trial_clock.getTime())
        mask_position = [maskX, 0.4]

        if trial_clock.getTime() >= duration:
            continueRoutine = False # end the current routine
            stroop_trials_loop.finished = True # exit the current loop
            Stroop_mouse.clicked_name = [999,999]
            if phase == "prac":
                phase = "main"
      End Routine:
        trial_count = trial_count+1
        if Stroop_mouse.clicked_name[0] == response:
            points = points + 1
            thisExp.addData('resp_corr', 1)
        else:
            points = points - 1
            thisExp.addData('resp_corr', 0)

        thisExp.addData('Stroop_crnt_score', points)
        trial_count = trial_count +1
    ImageComponent stim_image
      image [set every repeat] = $stimImage
      pos = (0, 0.1)
      saveStartStop = False
      size [set every repeat] = stroop_image_size
      startVal [time (s)] = 0.02
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    ImageComponent resp_A_image
      image [set every repeat] = $leftImage
      pos = (-.5, -.2)
      saveStartStop = False
      size [set every repeat] = stroop_image_size
      startVal [time (s)] = 0.02
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    ImageComponent resp_B_image
      image [set every repeat] = $rightImage
      pos = (.5, -.2)
      saveStartStop = False
      size [set every repeat] = stroop_image_size
      startVal [time (s)] = 0.02
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    ImageComponent timer_image
      image = Timer.png
      pos = (0, 0.4)
      saveStartStop = False
      size = [1.2, .03]
      startVal [time (s)] = 0.0
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    PolygonComponent timer_mask
      fillColor = gray
      lineColor = gray
      pos [set every frame] = $mask_position
      saveStartStop = False
      shape = rectangle
      size = [1.2, .03]
      startVal [time (s)] = 0.0
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    TextComponent time_left
      letterHeight = 0.03
      pos = (-.67, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Time left
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    TextComponent score_lable
      letterHeight = 0.03
      pos = (.67, 0.46)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Score
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    TextComponent score_presenter
      letterHeight = 0.04
      pos = (.67, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $points
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    TextComponent Stim
      color [set every repeat] = $stimColor
      letterHeight [set every repeat] = stm_height
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.02
      text [set every repeat] = $stimWord
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    TextComponent resp_A
      color [set every repeat] = $leftColor
      letterHeight [set every repeat] = stm_height
      pos = (-.5, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.02
      text [set every repeat] = $leftWord
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    TextComponent resp_B
      color [set every repeat] = $rightColor
      letterHeight [set every repeat] = stm_height
      pos = (.5, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.02
      text [set every repeat] = $rightWord
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    MouseComponent Stroop_mouse
      clickable = buttonA, buttonB
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.02
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    PolygonComponent buttonA
      fillColor = none
      lineWidth = 1.5
      pos = (-.5, -.2)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.25)
      startVal [time (s)] = 0.02
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    PolygonComponent buttonB
      fillColor = none
      lineWidth = 1.5
      pos = (.5, -.2)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.25)
      startVal [time (s)] = 0.02
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    TextComponent ins_txt_stroop
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Match picture on top to word on bottom
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  Routine ColorWordIns
    CodeComponent ins_code
      Code Type = Auto->JS
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      Begin Routine:
        if trial_count != 0:
            phase = "main"


        if stroop_block ==1:
            if phase == "prac":
                ins_txt = "See what color the top word is. Select that color from the two options below. DON'T pay attention to what the top word says or the color of the two options below. It's important to match the color of the top word with the meaning of the word below.\nWe will begin with a practice round. You will have 30 seconds to earn as many points as possible. Incorrect responses remove one point."
                button_msg = "        Begin Practice"
                WAIT_TXT = 'Start practice trials'
            else:
                ins_txt = "That's it for practice. Please review instructions one last time:\nSee what color the top word is. Select that color from the two opotions below. DON'T pay attention to what the top word says or the color of the two options below. It's important to match the color of the top word with the meaning of the word below.\nYou will have 90 seconds to earn as many points as possible."
                button_msg = "     Begin Experiment"
                WAIT_TXT = 'Start main trials'

        if stroop_block ==2:
            if phase == "prac":
                ins_txt = "See what emotion the top face is showing. Select that emotion's name from the two opotions below. DON'T pay attention to what the top word says or face of the two options below. It's important to match the displayed emotion of the top face with the meaning of the word below.\nWe will begin with a practice round. You will have 30 seconds to earn as many points as possible. Incorrect responses remove one point."
                button_msg = "        Begin Practice"
                WAIT_TXT = 'Start practice trials'
            else:
                ins_txt = "That's it for practice. Please review instructions one last time:\nSee what emotion the top face is showing. Select that emotion's name from the two opotions below. DON'T pay attention to what the top word says or face of the two options below. It's important to match the displayed emotion of the top face with the meaning of the word below.\nYou will have 90 seconds to earn as many points as possible."
                button_msg = "     Begin Experiment"
                WAIT_TXT = 'Start main trials'

        if stroop_block ==3:
            if phase == "prac":
                ins_txt = "See what price trend the stock chart is showing. Select the word for that trend from the two opotions below. DON'T pay attention to what the top word says or trend on the chart of the two options below. It's important to match the displayed trend of the top chart with the meaning of the word below.\nWe will begin with a practice round. You will have 30 seconds to earn as many points as possible. Incorrect responses remove one point."
                button_msg = "        Begin Practice"
                WAIT_TXT = 'Start practice trials'
            else:
                ins_txt = "That's it for practice. Please review instructions one last time:\nSee what price trend the stock chart is showing. Select the word for that trend from the two opotions below. DON'T pay attention to what the top word says or trend on the chart of the two options below. It's important to match the displayed trend of the top chart with the meaning of the word below.\nYou will have 90 seconds to earn as many points as possible."
                button_msg = "     Begin Experiment"
                WAIT_TXT = 'Start main trials'
    ImageComponent resp_B_2_image
      image [set every repeat] = $resp_B_2_image_setter
      pos = (.5, -.2)
      saveStartStop = False
      size [set every repeat] = stroop_image_size
      startVal [time (s)] = 0.0
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    ImageComponent resp_A_2_image
      image [set every repeat] = $resp_A_2_image_setter
      pos = (-.5, -.2)
      saveStartStop = False
      size [set every repeat] = stroop_image_size
      startVal [time (s)] = 0.0
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    ImageComponent Stim_2_image
      image [set every repeat] = $Stim_2_image_setter
      pos = (0, 0.1)
      saveStartStop = False
      size [set every repeat] = stroop_image_size
      startVal [time (s)] = 0.0
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    TextComponent colorWord_ins_txt_maker
      letterHeight = 0.04
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text [set every repeat]:
        $ins_txt
    TextComponent Stim_2
      color [set every repeat] = $Stim_2_color
      letterHeight = 0.09
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Stim_2_txt
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    TextComponent resp_A_2
      color [set every repeat] = $resp_A_2_color
      letterHeight = 0.09
      pos = (-.5, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp_A_2_txt
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    TextComponent resp_B_2
      color [set every repeat] = $resp_B_2_color
      letterHeight = 0.09
      pos = (.5, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $resp_B_2_txt
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    PolygonComponent buttonA_2
      fillColor = none
      lineWidth = 1.5
      pos = (-.5, -.2)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonB_2
      fillColor = none
      lineWidth = 1.5
      pos = (.5, -.2)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.25)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      color = black
      fillColor = white
      font = areal
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -.35)
      save = none
      saveStartStop = False
      size = (0.40, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = $button_msg
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    TextComponent ins_cue
      letterHeight = 0.02
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ins_cue_txt
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    ImageComponent checkmark
      image = 1200px-Green-checkmark.svg.png
      pos = (.5, 0)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent xmark
      image = Red_X.svg.png
      pos = (-0.48, 0)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent correct_txt
      letterHeight = 0.02
      pos = (0.5, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (right answer)
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    TextComponent wrong_txt
      letterHeight = 0.02
      pos = (-0.5, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (wrong answer)
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  Routine wait
    ImageComponent timer_image_2
      image = Timer.png
      pos = (0, 0.4)
      saveStartStop = False
      size = [1.2, .03]
      startVal [time (s)] = 0.0
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    TextComponent time_left_2
      letterHeight = 0.03
      pos = (-.67, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Time left
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    TextComponent score_lable_2
      letterHeight = 0.03
      pos = (.67, 0.46)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Score
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    TextComponent score_presenter_2
      letterHeight = 0.04
      pos = (.67, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0
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    TextComponent ins_again
      letterHeight = 0.03
      pos = (-.3, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Review instructions again
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    PolygonComponent again_button
      fillColor = none
      lineWidth = 2
      pos = (-.3, -.3)
      saveStartStop = False
      shape = rectangle
      size = (.4,.08)
      startVal [time (s)] = 0.0
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    TextComponent start_txt
      letterHeight = 0.03
      pos = (.3, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $WAIT_TXT
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    PolygonComponent start_button
      fillColor = none
      lineWidth = 2
      pos = (.3, -.3)
      saveStartStop = False
      shape = rectangle
      size = (.4,.08)
      startVal [time (s)] = 0.0
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    MouseComponent wait_mouse
      clickable = again_button, start_button
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent wait_code
      Code Type = Auto->JS
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      Before Experiment:
        ins_reps = 0
        phase='prac'
        trial_count = 0
        points = 0
      End Routine:
        if wait_mouse.clicked_name[0] == 'again_button':
            ins_reps = 1
        else:
            ins_reps = 0
        if phase == 'prac':
            duration = 30
        else:
            duration = 90

        points = 0
        trial_count = 0
  Routine blank
    TextComponent blank_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .02
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  Routine wait_2
    ImageComponent timer_image_3
      image = Timer.png
      pos = (0, 0.4)
      saveStartStop = False
      size = [1.2, .03]
      startVal [time (s)] = 0.0
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    TextComponent time_left_3
      letterHeight = 0.03
      pos = (-.67, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Time left
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    TextComponent score_lable_3
      letterHeight = 0.03
      pos = (.67, 0.46)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Score
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    TextComponent score_presenter_3
      letterHeight = 0.04
      pos = (.67, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0
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    TextComponent start_txt_2
      letterHeight = 0.03
      pos = (.3, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Start practice trials
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    PolygonComponent start_button_2
      fillColor = none
      lineWidth = 2
      pos = (.3, -.3)
      saveStartStop = False
      shape = rectangle
      size = (.4,.08)
      startVal [time (s)] = 0.0
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    MouseComponent wait_mouse_2
      clickable = start_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine prac_end_ins
    TextComponent colorWord_ins_txt_maker_2
      letterHeight = 0.04
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        That's it for practice. Please review instructions one last time:
        See what color the top word is. Select that color from the two potions below. DON'T pay attention to what the top word says or the color of the two options below. It's important to match the color of the top word with the meaning of the word below.
        You will have 90 seconds to earn as many points as possible.
    TextComponent Stim_3
      color = darkblue
      letterHeight = 0.09
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = RED
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    TextComponent resp_A_3
      color = darkblue
      letterHeight = 0.09
      pos = (-.5, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = RED
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    TextComponent resp_B_3
      color = darkred
      letterHeight = 0.09
      pos = (.5, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = BLUE
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    PolygonComponent buttonA_3
      fillColor = none
      lineWidth = 1.5
      pos = (-.5, -.2)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent buttonB_3
      fillColor = none
      lineWidth = 1.5
      pos = (.5, -.2)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.25)
      startVal [time (s)] = 0.0
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    ButtonComponent button_2
      bold = True
      color = black
      fillColor = white
      font = areal
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -.35)
      save = none
      saveStartStop = False
      size = (0.40, 0.1)
      startVal [time (s)] = 0
      text =         Begin Practice
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    TextComponent ins_cue_2
      letterHeight = 0.02
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (text is in blue color)
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    ImageComponent checkmark_2
      image = 1200px-Green-checkmark.svg.png
      pos = (.5, 0)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent xmark_2
      image = Red_X.svg.png
      pos = (-0.48, 0)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent correct_txt_2
      letterHeight = 0.02
      pos = (0.5, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (right answer)
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    TextComponent wrong_txt_2
      letterHeight = 0.02
      pos = (-0.5, -0.27)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (wrong answer)
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    CodeComponent prac_end_code
      Code Type = Auto->JS
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      Begin Routine:
        phase = 'main'
  Routine bart_trial
    CodeComponent updateEarnings
      Code Type = Auto->JS
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      Begin Experiment:
        bankedEarnings=0.0
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
      Each Frame:
        thisBalloonEarnings=nPumps*0.05
      End Routine:
        #calculate cash 'earned'
        if popped:
          thisBalloonEarnings=0.0
          lastBalloonEarnings=0.0
        else:   lastBalloonEarnings=thisBalloonEarnings
        bankedEarnings = bankedEarnings+lastBalloonEarnings
    CodeComponent setBalloonSize
      Code Type = Auto->JS
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      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Begin Routine:
        balloonSize=0.08
        popped=False
        nPumps=0
      Each Frame:
        balloonSize=0.1+nPumps*0.015
      End Routine:
        #save data
        bart_trials.addData('nPumps', nPumps)
        bart_trials.addData('size', balloonSize)
        bart_trials.addData('earnings', thisBalloonEarnings)
        bart_trials.addData('popped', popped)
    ImageComponent balloonBody
      image = redBalloon.png
      pos [set every frame] = $[-1+balloonSize/2, 0]
      size [set every frame] = $balloonSize
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent reminderMsg
      letterHeight = 0.05
      pos = [0, -0.8]
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Press SPACE to pump the balloon
        Press ENTER to bank this balloon and start the next one
    TextComponent balloonValMsg
      letterHeight = 0.1
      pos = [0,0.05]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $u"This balloon value:\n%.2f Dollars" %thisBalloonEarnings
      units = norm
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    TextComponent bankedMsg
      letterHeight = 0.1
      pos = [0, 0.8]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $u"You have banked:\n%.2f Dollars" %bankedEarnings
      units = norm
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    CodeComponent checkKeys
      Code Type = Auto->JS
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      Each Frame:
        if event.getKeys(['space']):
          nPumps=nPumps+1
          if nPumps>maxPumps:
            popped=True
            continueRoutine=False
    KeyboardComponent bankButton
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent do_not_edit
      Code Type = Auto->JS
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      Begin Experiment:
        # ** THIS CODE COMPONENT SHOULD BE AT THE TOP IN THE BUILDER VIEW **
        # All code in this code component should be fully generic to any
        # Bayesian Adaptive Design experiment and so should not be edited
        # unless you know what you are doing.


        # ONLY FOR BEN WHILE TESTING ------------------------------
        import sys
        sys.path.insert(0, '/Users/benjamv/git-local/badapted')
        sys.path.insert(0, '/Users/benjamv/git-local/darc_toolbox')
        # ---------------------------------------------------------


        from badapted.designs import BayesianAdaptiveDesignGenerator
        from darc_toolbox.utils import was_last_response_B


        # Set up a logger for BAD related debugging
        import logging
        logging.basicConfig(filename=filename+'_BAD.log',
            level=logging.DEBUG,
            format='%(asctime)s:%(levelname)s:%(funcName)s:%(message)s')


        # We will tell the PsychoPy trial loop thing that we will have an
        # arbitrarily high number of trials. We specify number of trials through
        # the Experiment Settings GUI. The trial routine is ended when our
        # design generator returns None
        max_trials = 666


        # we start with no previous response
        last_response_chose_B = None
      Begin Routine:
        # DESIGN GENERATOR =================================================
        design = design_thing.get_next_design(model)

        # If we are out of designs, then break out of the trial loop
        if design is None:
            print('Breaking out of trial loop now')
            break

        # NOTE TO EXPERIMENTER: if we want to do any adjustments to the design,
        # such as rounding up significant figures etc, we should do that here to
        # the actual design itself rather than just the text displayed to
        # participants. That way the data we output will correspond exactly to the
        # prospects actually shown to participants.
      End Experiment:
        # export parameter summary
        model.θ.describe().to_csv(filename+'_parameter_summary.csv')

        # export all particles, full posterior
        model.θ.to_csv(filename+'_parameter_all_particles.csv')

        # visualise posterior distributions
        try:
            model.posterior_triplot(filename)
        except Exception as err:
            print('FAILED to export posterior histograms as .pdf')
            print(f'Error {err}')
      End Routine:
        # Clear screen as soon as we press the button. Useful because the code
        # below can take a moment to run before things are cleared, which leads to
        # crappy responsivity
        win.flip()

        # Turn the response from PsychoPy into a True/False, did they choose B?
        # `response` is the name of a PsychoPy keyboard component.
        last_response_chose_B = was_last_response_B(response.keys)

        design_thing.enter_trial_design_and_response(design, last_response_chose_B)

        model.update_beliefs(design_thing.data)
    CodeComponent darc
      Code Type = Auto->JS
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      Begin Experiment:
        # Import our DARC design code
        from darc_toolbox import Design
        from darc_toolbox.utils import days_to_string
        from darc_toolbox.data_plotting import data_plotter
        from darc_toolbox.delayed import models
        from darc_toolbox.designs import DesignSpaceBuilder


        # Process experimenter inputs from experiment settings GUI -------------
        # Number of trials obtained from the PsychoPy GUI is stored as a string
        # so we need to convert that to an integer.
        expInfo['trials'] = int(expInfo['trials'])
        # Convert number of particles from the GUI to an integer
        expInfo['particles'] = int(expInfo['particles'])


        # Now we will chose our (design, model) combination.
        model = models.Hyperbolic(n_particles=expInfo['particles'])
        D = DesignSpaceBuilder.delayed().build()
        design_thing = BayesianAdaptiveDesignGenerator(D, max_trials=expInfo['trials'])


        # If you want to customise the location and filename of saved data, then
        # edit that in Experiment Settings > Data tab.
        # OR you can overwrite that with the following line, adapted for your
        # goals
        #     filename = _thisDir + os.sep + u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])


        def design_to_display_strings(design):
            '''A function to convert a design into strings available for PsychoPy
            to print to screen.
            Experimenters can edit this code to customise how the stimuli are
            presented to participants. For example, you can change from £ to
            whatever your local currency symbol is.'''
            # rewards -------------------------
            text_RA = f'${design.RA:0.2f}'
            text_RB = f'${design.RB:0.2f}'

            # delays --------------------------
            text_DA = days_to_string(design.DA)
            text_DB = days_to_string(design.DB)

            # probabilities -------------------
            text_PA = f'{design.PA*100:3.0f}%'
            text_PB = f'{design.PB*100:3.0f}%'
            return (text_RA, text_RB, text_DA, text_DB, text_PA, text_PB)
      Begin Routine:
        # convert the design into meaningful strings
        text_RA, text_RB, text_DA, text_DB, text_PA, text_PB = design_to_display_strings(design)
      End Experiment:
        # visualise the data (designs and responses)
        try:
            data_plotter(design_thing.data, filename)
        except Exception as err:
            print('FAILED to export plot of response data')
            print(f'Error: {err}')
      End Routine:
        # add DARC specific data, eventually exported by PsychoPy as a .csv
        # note: the name here (ie `trials` has to match the PsychoPy trial
        # loop object name
        trials.addData('RA', design.RA)
        trials.addData('DA', design.DA)
        trials.addData('PA', design.PA)

        trials.addData('RB', design.RB)
        trials.addData('DB', design.DB)
        trials.addData('PB', design.PB)

        if last_response_chose_B:
            trials.addData('R', 'B')
        else:
            trials.addData('R', 'A')
    TextComponent RAitem
      font = Calibri
      letterHeight = 0.1
      pos = (-0.4, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $text_RA
      units = norm
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    TextComponent DAitem
      font = Calibri
      letterHeight = 0.1
      pos = (-0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $text_DA
      units = norm
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    TextComponent PAitem
      font = Calibri
      letterHeight = 0.1
      pos = (-0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = Left Arrow
      units = norm
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    TextComponent RBitem
      font = Calibri
      letterHeight = 0.1
      pos = (0.4,0.2)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $text_RB
      units = norm
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    TextComponent DBitem
      font = Calibri
      letterHeight = 0.1
      pos = (0.4, 0)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $text_DB
      units = norm
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    TextComponent PBitem
      font = Calibri
      letterHeight = 0.1
      pos = (0.4, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = Right Arrow
      units = norm
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    KeyboardComponent response
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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    TextComponent instruction_text
      letterHeight = 0.1
      pos = (0,0.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = left or right arrow keys to chose
      units = norm
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  Routine stroop_extra_code
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if stroop_block ==1:
            thisExp.addData('color_word_final_score', points)
        if stroop_block ==2:
            thisExp.addData('emotion_final_score', points)
        if stroop_block ==3:
            thisExp.addData('gain_loss_final_score', points)
  Routine finance_self_efficacy
    FormComponent self_efficacy
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.07
      Items = finance_self_efficacy_scale.xlsx
      Randomize = False
      Style = custom...
      Text Height = 0.025
      itemColor = white
      markerColor = red
      pos = (-0.25, 0)
      responseColor = white
      saveStartStop = False
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent submit_button
      image = submit.png
      pos = (0.55, -0.4)
      saveStartStop = False
      size = (0.25, 0.1007)
      startVal [condition] = $self_efficacy.complete == True
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    MouseComponent self_efficacy_mouse
      clickable = submit_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = black
      letterHeight = 0.03
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Using the scale provided, please indicate how much each of the following statements reflects how you typically are
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  Routine brief_self_control_scale
    FormComponent self_control
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.07
      Items = Brief_self_control_scale.xlsx
      Randomize = False
      Style = custom...
      Text Height = 0.025
      itemColor = white
      markerColor = red
      pos = (-0.25, 0)
      responseColor = white
      saveStartStop = False
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent submit_button_2
      image = submit.png
      pos = (0.55, -0.4)
      saveStartStop = False
      size = (0.25, 0.1007)
      startVal [condition] = $self_control.complete == True
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    MouseComponent self_control_mouse
      clickable = submit_button_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = black
      letterHeight = 0.03
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Using the scale provided, please indicate how much each of the following statements reflects how you typically are
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Flow
  LoopInitiator stroop_all_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine stroop_square_welcome
    LoopInitiator pracTOreal_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 2
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      Routine ColorWordIns
      Routine blank
      Routine wait
      LoopInitiator extra_ins loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = ins_reps
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        Routine blank
        Routine ColorWordIns
        Routine blank
        Routine wait_2
      LoopTerminator extra_ins
      LoopInitiator stroop_trials_loop loopType="TrialHandler"
        conditionsFile = $condition_gen
        loopType = random
        nReps = 400
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        Routine stroop_square_trials
      LoopTerminator stroop_trials_loop
    LoopTerminator pracTOreal_loop
    Routine stroop_extra_code
  LoopTerminator stroop_all_loop
  Routine blank
  Routine end
